PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = ultamatum
  keyboardBackend = ioHub
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Routines
  Routine Deal_Completed
    TextComponent deal_Completed
      letterHeight = 0.1
      opacity [set every frame] = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        Deal Completed
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2.0
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      text:
        Synchronising wallets

        Please wait
  Routine trial
    CodeComponent splitter
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        dur = 1+ (random.random() * 3)
        pot1 = 0
        pot2 = 0
        msg1 = u'Rs %i' %pot1
        msg2= u'Rs %i' %pot2
        offer = ''
        all_frames = ['I will take', 'You will receive','I will take', 'You will receive',
        'I will take', 'You will receive', 'I will take', 'You will receive','I will take', 'You will receive',
        'I will take', 'You will receive']
        random.shuffle(all_frames)
        offers = [(60,40),(70,30),(80,20),(90,10), (63,37),(50,50),(23,77),(15,85),(41,59),(68,32),(74,26)]
        random.shuffle(offers)
        i=-1
      Begin Routine:
        i+=1
        msg1 = u'Rs %i' %pot1
        msg2= u'Rs %i' %pot2
        thisFrame = all_frames.pop(0)
        if thisFrame == 'I will take':
            thisSplit = u'Rs %i' %offers[i][0]
        elif thisFrame =='You will receive':
            thisSplit = u'Rs %i' %offers[i][1]
      End Routine:
        if key_resp1.keys == 'y':
            if thisFrame == 'I will take':
                pot1 += offers[i][0]
                pot2 += offers[i][1]
            elif thisFrame =='You will receive':
                pot2 += offers[i][0]
                pot1 += offers[i][1]
        if i == 4:
            random.shuffle(offers)
            i = -1

        trials.addData('Frame', thisFrame)
        trials.addData('offer', offers[i][1])
        trials.addData('Total_Pot', pot1)
    TextComponent Player1Pot
      letterHeight = 0.1
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg1
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    TextComponent Player2Pot
      letterHeight = 0.1
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg2
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    TextComponent split
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $thisSplit
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    TextComponent AmountToSplit
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = There is Rs 100 on offer!
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    TextComponent frametext
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $thisFrame
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    KeyboardComponent key_resp1
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent wallet_label1
      letterHeight = 0.1
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = Proposer Wallet
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    TextComponent wallet_label2
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = Your Wallet
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  Routine Thank_You
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        total = u'Thank you for participating. Your total was Rs %i' %pot2
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $total
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Proposer(anonymous) is going to make you an offer from a money pot of Rs 100.

        You can accept their offer with 'Y' or decline their offer with 'N'.

        If you accept their offer, you will both receive your split of the money.

        If you decline, neither of you will receive anything.

        Please press space to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine think
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Proposer is preparing the deal
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  Routine expect
    SliderComponent Expect
      forceEndRoutine = True
      granularity = 0
      labels = (10,20,30,40,50,60,70,80,90)
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = How Much Reward Do You Expect? : 
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  Routine feelAfter
    SliderComponent ArousalAfter
      borderColor = -1.0000, 0.0039, -1.0000
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (-2,-1,0,1,2)
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent ValenceAfter
      borderColor = 1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      granularity = 0
      labels = (-2,-1,0,1,2)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = How Happy You Feel:
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = How Angry You Feel? :
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  Routine feelBefore
    SliderComponent ExpectedArousal2
      borderColor = 1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      granularity = 0
      labels = (-2,-1,0,1,2)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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    TextComponent textBefore
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = How Happy You Feel:
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    TextComponent text2Before
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = How Angry You Feel? :
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    SliderComponent ExpectedValence
      borderColor = -1.0000, 0.0039, -1.0000
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (-2,-1,0,1,2)
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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  Routine think2
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        all_frames2 = ['Arpit', 'Aryan','Rohit', 'Harsh',
        'Ankit', 'Rishabh', 'Aditya', 'Mandhar','Vedant']
        random.shuffle(all_frames2)
        i=-1
      Begin Routine:
        i+=1
        thisFrame2 = all_frames2.pop(0)
        thisSplit2 = u'Proposer is %s' %thisFrame2
    TextComponent textT2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $thisSplit2
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  Routine expect2
    TextComponent anonytext0498
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = How Much Reward Do You Expect? : 
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    SliderComponent anonyExpect
      forceEndRoutine = True
      granularity = 0
      labels = (10,20,30,40,50,60,70,80,90)
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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  Routine feelBefore2
    TextComponent textBefore_2
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = How Happy You Feel:
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    TextComponent text2Before_2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = How Angry You Feel? :
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    SliderComponent anonyExpectedValence
      borderColor = -1.0000, 0.0039, -1.0000
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent anonyExpectedArousal
      borderColor = 1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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  Routine trial2
    CodeComponent splitter_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        dur = 1+ (random.random() * 3)
        pot1 = 0
        pot2 = 0
        msg1 = u'Rs %i' %pot1
        msg2= u'Rs %i' %pot2
        offer = ''
        all_frames = ['I will take', 'You will receive','I will take', 'You will receive',
        'I will take', 'You will receive', 'I will take', 'You will receive','I will take', 'You will receive',
        'I will take', 'You will receive']
        random.shuffle(all_frames)
        offers = [(6,4),(7,3),(8,2),(9,1), (6,4)]
        random.shuffle(offers)
        i=-1
      Begin Routine:
        i+=1
        msg1 = u'Rs %i' %pot1
        msg2= u'Rs %i' %pot2
        thisFrame = all_frames.pop(0)
        if thisFrame == 'I will take':
            thisSplit = u'Rs %i' %offers[i][0]
        elif thisFrame =='You will receive':
            thisSplit = u'Rs %i' %offers[i][1]
      End Routine:
        if key_resp1.keys == 'y':
            if thisFrame == 'I will take':
                pot1 += offers[i][0]
                pot2 += offers[i][1]
            elif thisFrame =='You will receive':
                pot2 += offers[i][0]
                pot1 += offers[i][1]
        if i == 4:
            random.shuffle(offers)
            i = -1

        trials.addData('Frame', thisFrame)
        trials.addData('offer', offers[i][1])
        trials.addData('Total_Pot', pot1)
    TextComponent frametext_2
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $thisFrame
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    TextComponent AmountToSplit_2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = There is Rs 10 on offer!
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    TextComponent split_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $thisSplit
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    TextComponent Player2Pot_2
      letterHeight = 0.1
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Press 'N' to Reject!
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    TextComponent Player1Pot_2
      letterHeight = 0.1
      pos = (-0.5, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Press 'Y' to Accept!
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    KeyboardComponent key_resp1_2
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.12
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $thisSplit2
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  Routine feelAfter2
    SliderComponent anonyValenceAfter
      borderColor = 1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = How Happy You Feel:
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = How Angry You Feel? :
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    SliderComponent anonyArousalAfter
      borderColor = -1.0000, 0.0039, -1.0000
      color = 1.0000, 1.0000, 1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine think
    Routine expect
    Routine feelBefore
    Routine trial
    Routine Deal_Completed
    Routine feelAfter
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine think2
    Routine expect2
    Routine feelBefore2
    Routine trial2
    Routine Deal_Completed
    Routine feelAfter2
  LoopTerminator trials_2
  Routine Thank_You
